<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
   <DeviceSet 
      Name="PLUS devices (NDI Spectra) to stream. "
      Description="none." />

	<Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="7"
      BaudRate="115200"
	  AcquisitionRate="60"
      ToolReferenceFrame="Tracker" >
      <DataSources>
		<DataSource Type="Tool" Id="Laser" RomFile="ToolDefinitions/Laser.rom"  />
		<DataSource Type="Tool" Id="Camera" RomFile="ToolDefinitions/Camera.rom"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
		  <DataSource Id="Probe"/>
		  <DataSource Id="Model" />
		  <DataSource Id="Camera"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
	
	<Device
      Id="CamVideoDevice" 
      Type="MmfVideo" 
      FrameSize="640 480"
      VideoFormat="YUY2"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="CamVideo" PortUsImageOrientation="MN" ImageType="RGB_COLOR"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="CamVideoStream" VideoDataSourceId="CamVideo" />
      </OutputChannels>
    </Device>
	
	</DataCollection>
	
  <CoordinateDefinitions>
  
		<Transform From="Camera" To="CameraImagePlane"
			Matrix="
			-0.1695		0.9852 	-0.0239 	-1.8328 
			-0.9852 	-0.1700 -0.0228 	-22.4469 
			-0.0265 	0.0197 	 0.9995 	-3.8732 
			0.0000 		0.0000 	 0.0000 	 1.0000"
			Error="1.83" Date="20170209T2050" />
	  
		<Transform From="Laser" To="PlaneOrigin"
			Matrix="
			1.0000		0 		0 		33.3550 
			0          1.0000  0 		73.8980 
			0          0 	 	1.0000	-43.4400 
			0          0 	 	0.0000 	 1.0000"
			Error="1.83" Date="20170630T2050" />
		  
		  
			<Transform From="Laser" To="PlaneNormal"
			Matrix="
			1.0000		0 		0 		-0.9800
			0          1.0000  0 		-0.1985
			0          0 	 	1.0000	-0.0155 
			0          0 	 	0.0000 	 0"
			Error="1.83" Date="20170630T2050" />
		 
	  
	</CoordinateDefinitions>  
</PlusConfiguration>