<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Media Foundation video capture device - color"
      Description="Broadcasting acquired video through OpenIGTLink" />
    
	<Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="7"
      BaudRate="115200"
	  AcquisitionRate="60"
      ToolReferenceFrame="Tracker" >
      <DataSources>
	  
		<DataSource Type="Tool" Id="Camera" RomFile="ToolDefinitions/Camera.rom"  />
		<DataSource Type="Tool" Id="RedLaser" RomFile="ToolDefinitions/RedLaser.rom"    />
		<DataSource Type="Tool" Id="GreenLaser" RomFile="ToolDefinitions/GreenLaser.rom"    />
		<DataSource Type="Tool" Id="HMD"		RomFile="ToolDefinitions/HMDUpdate.rom" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" > 
		  <DataSource Id="Camera"/>
		  <DataSource Id="RedLaser"/>
		  <DataSource Id="GreenLaser"/>
		<DataSource  Id="HMD" />
        </OutputChannel>
      </OutputChannels>
    </Device>
	
	<Device
      Id="VideoDevice" 
      Type="MmfVideo" 
      FrameSize="640 480"
      VideoFormat="RGB24"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
	
	<Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
	
  </DataCollection>

  <CoordinateDefinitions>
	<Transform From="Camera" To="ImagePlane"
		Matrix="
		-0.99981   -0.0148    -0.01251   -39.8957
		0.001761   0.573427   -0.81925   -19.3914
		0.019293   -0.81912   -0.57329   9.935949
		0 			0 		   0 		  1.0000"
      Error="0.02" Date="12102016_2318" />
			
	<Transform From="Pixel" To="ImagePlane"
		Matrix="
		1.0000		0 		0 		-3.18246521e+002
		0          1.0000  0 		-2.36307892e+002
		0          0 	 	6.21962708e+002	0 
		0          0 	 	0.0000 	 1"
		Error="1.83" Date="20170630T2050" />
		
	<Transform From="RedLaser" To="RedPlaneOrigin"
		Matrix="
		1.0000		0 		0 		-0.9316   
		0          1.0000  0 		-42.8642
		0          0 	 	1.0000	 -28.1282
		0          0 	 	0.0000 	 1.0000"
		Error="1.83" Date="20170816" />
		
	<Transform From="RedLaser" To="RedPlaneNormal"
		Matrix="
		-0.9998151	0 		0 		 0
		0.00514673  1.0000  0 		 0
		0.01852691  0       1.0000	 0		
		0           0 	 	0    	 1.0000"
		Error="1.83" Date="20170816" />
	
		
	<Transform From="GreenLaser" To="GreenPlaneOrigin"
		Matrix="
		1.0000		0 		0 		-0.84621
		0          1.0000  0 		 -52.171
		0          0 	 	1.0000	-36.693
		0          0 	 	0.0000 	 1.0000"
		Error="1.83" Date="20170816" />
		
	
	<Transform From="GreenLaser" To="GreenPlaneNormal"
		Matrix="
		-0.99971486		0 		0 		 0
		0.011758796     1.0000  0 		 0
		0.020782693     0 	 	1.0000	 0
		0               0 	 	0.0000 	 1.0000"
		Error="1.83" Date="20170816" />
	
	
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
